;hsqcetgpsisp2.2_bbhd.ti + ONESHOT-DOSY SEGMENT
;avance-version (16/04/05)
;2D H-1/X correlation via double inept transfer
;   using sensitivity improvement
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using trim pulses in inept transfer
;using shaped pulses for all 180degree pulses on f2 - channel
;with gradients in back-inept
;using 1H broadband homodecoupling during acquisition with [BIRD]r,x element
;using dwellmode explicit
;CH2 groups may be left as doublets with 2J(HH) spliting
;
;NUS version
;Cabrera Allpas, R., K. Lee, D-W. Li, M. Choo, L. Bruschweiler-Li, R. BruÌschweiler. 
;3D Pure Shift HSQC-DOSY NMR with COLMARvista. Anal. Chem. (2026)
;L. Paudel, R.W. Adams, P. Kiraly, J.A. Aguilar, M. Foroozandeh,
;   M.J. Cliff, M. Nilsson, P. Sandor, J.P. Waltho & G.A. Morris,
;   Angew. Chem. 125, 11830-11833 (2013)
;(P. Sakhaii, B. Haase & W. Bermel, J. Magn. Reson. 199, 192-198 (2009))
;A.G. Palmer III, J. Cavanagh, P.E. Wright & M. Rance, J. Magn.
;   Reson. 93, 151-170 (1991)
;L.E. Kay, P. Keifer & T. Saarinen, J. Am. Chem. Soc. 114,
;   10663-5 (1992)
;J. Schleucher, M. Schwendinger, M. Sattler, P. Schmidt, O. Schedletzky,
;   S.J. Glaser, O.W. Sorensen & C. Griesinger, J. Biomol. NMR 4,
;   301-306 (1994)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=
;
;6 Dec 2017     Modified by IT
;18 Mar 2025 Added ONESHOT DOSY SEGMENT at the start by RC
;HSQC-DOSY PURESHIFT
;8/18/26 Changes post publication: Edited reference to associate with publication. Removed reset-HSQC comment. Tested on Topspin 3.7.0.


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>
#include <De.incl>

;;;;;;;;;;;;;;;; DOSY parameters ;;;;;;;;;;;;;;;;
define list<gradient> diff=<Difframp>
"p2=p1*2"
"d2=1s/(cnst2*2)"
"d4=1s/(cnst2*4)"
"d11=30m"
"d12=20u"
"p29=500u"


"d0=3u"

"in0=inf1/2"


"d62=aq/l0"
"d63=d62/2"


;oneshot DOSY stuffs
"cnst14=0.2"
"cnst15=1+cnst14"  ; 1 + alpha
"cnst16=1-cnst14"  ; 1 - alpha




;end of oneshot DOSY stuffs

"l1=l0-1"


"DELTA=p16+d16+p2+d0*2-4u"
"DELTA1=p16+d16-p1*0.78+de+8u"
"DELTA2=d4-larger(p2,p14)/2-4u"
"DELTA3=d24-cnst17*p24/2-p19-d16-4u"
"DELTA4=d4-larger(p2,p14)/2-p16-d16-4u"
"DELTA5=d2-larger(p2,p39)/2"
"DELTA7=d20-4.0*p1-4.0*p30-5.0*d15-p19" ;
"TAU=p39"
"d18=2m"

"acqt0=0"
baseopt_echo
aqseq 312

dwellmode explicit


1 ze
  d11 pl12:f2
2 d11 do:f2 
  1m pl1:f1
  1m pl2:f2
  10u UNBLKGRAD
  p8 ph21
  p8 ph22
  d18 BLKGRAD
  d12 pl9:f1
  d1 cw:f1 ph29
  50u do:f1 
  d12 pl1:f1
  1m  UNBLKGRAD
  p27:gp12*-1.0				;Spoiler gradient balancing pulse
  d15 

;DOSY
3 (p1 ph11)				; start of ONESHOT		              	
  p30:gp11*diff*cnst16 		 	;1 - alpha
  d15     
  p2 ph14					;First 180
  p30:gp11*-1*diff*cnst15		;1 + alpha
  d15
  p1 ph12					; 2nd 90
  p30:gp11*diff*2*cnst14			;Lock refocusing pulse pulse
  d15
  p27:gp12				;Spoiler gradient balancing pulse
  d15 
  DELTA7
  p30:gp11*diff*2*cnst14 		;Lock refocusing pulse pulse
  d15   
  p1 ph13					; 3rd 90
  p30:gp11*diff*cnst16   			; 1 - alpha
  d15
  p2 ph14		
  p30:gp11*-1*diff*cnst15		;1 + alpha
  d15
  					; end of ONESHOT ;


;start of HSQC

  DELTA2
  4u
  (center (p2 ph1) (p14:sp3 ph6):f2 )
  4u
  DELTA2 pl2:f2
  p28 ph1
  4u
  (p1 ph2) (p3 ph3):f2
  d0 
  (p2 ph7)
  d0
  p16:gp1*EA
  d16
  (p24:sp7 ph8:r):f2
  4u
  DELTA pl2:f2
  (center (p1 ph1) (p3 ph4):f2 )
  4u
  p19:gp3
  d16
  DELTA3
  (center (p2 ph1) (p24:sp7 ph9:r):f2 )
  4u
  DELTA3 pl2:f2
  p19:gp3
  d16
  (center (p1 ph2) (p3 ph5):f2 )
  4u
  p16:gp4
  d16
  DELTA4
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  4u
  DELTA4
  p16:gp4
  d16
  (p1 ph1)
  DELTA1
  (p2 ph1)
  4u
  p16:gp2
  d16 pl12:f2

  4u cpd2:f2
  ACQ_START(ph30,ph31)

  0.1u REC_UNBLK
  0.05u DWL_CLK_ON
  d63
  0.05u DWL_CLK_OFF
  0.1u REC_BLK

  10u do:f2
  p29:gp5
  d17
  TAU
  (p1 ph1)
  DELTA5
  4u
  (center (p2 ph2) (p39:sp4 ph1):f2 )
  4u
  DELTA5
  (p1 ph10)
  (p39:sp4 ph1):f2
  p29:gp5
  d17 pl12:f2
  20u
  p29:gp7
  d17
  4u
  (p2 ph1)
  4u
  p29:gp7
  d17
  10u cpd2:f2

4 0.1u REC_UNBLK
  0.05u DWL_CLK_ON
  d62
  0.05u DWL_CLK_OFF
  0.1u REC_BLK
  
  10u do:f2
  p29:gp5
  d17
  TAU
  (p1 ph1)
  DELTA5
  4u
  (center (p2 ph2) (p39:sp4 ph1):f2 )
  4u
  DELTA5
  (p1 ph10)
  (p39:sp4 ph1):f2
  p29:gp5
  d17 pl12:f2
  20u
  p29:gp7
  d17
  4u
  (p2 ph1)
  4u
  p29:gp7
  d17
  10u cpd2:f2

  lo to 4 times l1

  0.1u REC_UNBLK
  0.05u DWL_CLK_ON
  d62*2
  0.05u DWL_CLK_OFF
  0.1u REC_BLK

  rcyc=2


  d11 do:f2 mc #0 to 2 
  F2QF(calgrad(diff))   
	F1EA(calgrad(EA) & calph(ph5, +180), caldel(d0, +in0) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))

  4u BLKGRAD
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 2 2
ph5=1 1 3 3
ph6=0
ph7=0 0 2 2
ph8=0 0 2 2
ph9=0
ph10=2
ph30=0
ph31=0 2 2 0

ph11=0 
ph12=0
ph13=0 
ph14=0 
ph21=0
ph22=1
ph29=0
  

;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;pl9 : f1 channel - power level for presaturation
;sp3: f2 channel - shaped pulse (180degree inversion)
;spnam3: Crp60,0.5,20.1 (Crp80,0.5,20.1)
;sp4: f2 channel - shaped pulse (180degree refocussing)
;spnam4: Bip720,100,10.1
;sp7: f2 channel - shaped pulse (180degree refocussing)
;spnam7: Crp60comp.4 (Crp80comp.4)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p8 : f1 channel - spherical randomization high power pulse		[1.5 msec]
;p14: f2 channel - 180 degree shaped pulse for inversion
;     = 500usec for Crp60,0.5,20.1
;p16: homospoil/gradient pulse                            [1 msec]
;p19: gradient pulse 2                                    [500 usec]
;p24: f2 channel - 180 degree shaped pulse for refocussing
;     = 2msec for Crp60comp.4
;p28: f1 channel - trim pulse
;p29: gradient pulse 3                                    [300 usec]
;p27: balancing gradient for oneshot dosy [1200 usec]
;p39: f2 channel - 180 degree shaped pulse for refocussing
;                      Bip720,100,10.1 (160us at 600.13 MHz)
;d0 : incremented delay (2D)                              [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J)XH
;d4 : 1/(4J)XH
;d11: delay for disk I/O                                  [30 msec]
;d16: delay for homospoil/gradient recovery
;d15: delay for gradient recovery (Oneshot)
         
;d17: delay during hsqc pureshift
;d18: delay for gradient recovery (Spherical randomization)    [2 msec]
;d24: 1/(8J)XH for all multiplicities
;     1/(4J)XH for XH
;d62: length of block between decoupling pulses : = aq/l0 [< 20-25 msec]
;d63: = d62/2
;cnst2: = J(XH)
;cnst17: = -0.5 for Crp60comp.4
;l0 : number of blocks during acquisition time
;        adjust to get d62 as required
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence

;p30:	gradient pulse (little DELTA*0.5)

;d20: diffusion encoding period (big DELTA)


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13
;gpz3: 11%
;gpz4: -5%
;gpz5: 31%
;gpz7: 49%

;gpz11: 100%
;gpz12: 67%

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.50
;gpnam7: SMSQ10.50

;gpnam11: SINE.100
;gpnam12: SINE.100

;cnst17: Factor to compensate for coupling evolution during a pulse
;       (usually +1). A positive factor indicates that coupling
;       evolution continues during the pulse, whereas a negative
;       factor is necessary if the coupling is (partially) refocussed.



;$Id: hsqcetgpsisp2.2_bbhd,v 1.1.4.1 2016/04/06 09:21:25 ber Exp $
